PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = LangExperimentnonstød
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instr
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You will complete 4 practice sentences now.

        Press the space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
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    SoundComponent test_sound
      deviceLabel = ptb
      sound [set every repeat] = $sounds
      speakerIndex = 1.0
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fixationcross
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    ParallelOutComponent p_port_item
      address = USB2TTL8
      register = EIO
      startData = $ID_item
      startVal [time (s)] = $trigger_item
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = False
      syncScreenRefresh = False
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    ParallelOutComponent p_port_sen
      address = 0x0378
      register = EIO
      startData = $ID_senonset
      startVal [time (s)] = $trigger_senonset
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_verb
      address = 0x0378
      register = EIO
      startData = $ID_verbonset
      startVal [time (s)] = $trigger_verbonset
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_F0
      address = 0x0378
      register = EIO
      startData = $ID_F0
      startVal [time (s)] = $trigger_F0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    ParallelOutComponent p_port_suffix
      address = 0x0378
      register = EIO
      startData = $ID_suffix
      startVal [time (s)] = $trigger_suffix
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    SerialOutComponent serialPort
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = 1.0
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine Thanks
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Thank you for participating in this study.
  Routine test_instructions_2
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now you will begin the experiment.

        Press shift to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ready
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  Routine takeabreak
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Take a breath.

        Press the space bar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions_stress_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sounds': 'sounds/p1a_saltar.wav', 'syll': 'CVC', 'stress_unstress': 'Stressed', 'suffix': 'Match', 'present_past': 'present', 'corrAns': 'num_1', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 10, 'ID_verbonset': 11, 'ID_F0': 12, 'ID_suffix': 13, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/p1b_saltar.wav', 'syll': 'CVC', 'stress_unstress': 'Unstressed', 'suffix': 'Mismatch', 'present_past': 'present', 'corrAns': 'num_1', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 20, 'ID_verbonset': 21, 'ID_F0': 22, 'ID_suffix': 23, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/p1c_saltar.wav', 'syll': 'CVC', 'stress_unstress': 'Unstressed', 'suffix': 'Match', 'present_past': 'past', 'corrAns': 'num_2', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 30, 'ID_verbonset': 31, 'ID_F0': 32, 'ID_suffix': 33, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/p1d_saltar.wav', 'syll': 'CVC', 'stress_unstress': 'Stressed', 'suffix': 'Mismatch', 'present_past': 'past', 'corrAns': 'num_2', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 40, 'ID_verbonset': 41, 'ID_F0': 42, 'ID_suffix': 43, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797}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
    Routine test
    Routine takeabreak
  LoopTerminator practice
  Routine test_instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions_stress.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sounds': 'sounds/1a_salvar.wav', 'syll': 'CVC', 'stress_unstress': 'Stressed', 'suffix': 'Match', 'present_past': 'present', 'corrAns': 'num_1', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 10, 'ID_verbonset': 11, 'ID_F0': 12, 'ID_suffix': 13, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/1b_salvar.wav', 'syll': 'CVC', 'stress_unstress': 'Unstressed', 'suffix': 'Mismatch', 'present_past': 'present', 'corrAns': 'num_1', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 20, 'ID_verbonset': 21, 'ID_F0': 22, 'ID_suffix': 23, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/1c_salvar.wav', 'syll': 'CVC', 'stress_unstress': 'Unstressed', 'suffix': 'Match', 'present_past': 'past', 'corrAns': 'num_2', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 30, 'ID_verbonset': 31, 'ID_F0': 32, 'ID_suffix': 33, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797},
      {'sounds': 'sounds/1d_salvar.wav', 'syll': 'CVC', 'stress_unstress': 'Stressed', 'suffix': 'Mismatch', 'present_past': 'past', 'corrAns': 'num_2', 'trigger_item': 0.2, 'trigger_senonset': 0.40502800000000005, 'trigger_verbsonset': 1.024133, 'trigger_F0': 1.1959199999999999, 'trigger_suffix': 1.3097969999999999, 'ID_item': 101, 'ID_senonset': 40, 'ID_verbonset': 41, 'ID_F0': 42, 'ID_suffix': 43, 'ms_senonset': 0.20502800000000002, 'ms_verbonset': 0.824133, 'ms_F0': 0.9959199999999999, 'ms_suffix': 1.109797}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
    Routine test
    Routine takeabreak
  LoopTerminator trials
  Routine Thanks
